[[model]]
name: Time-dependent, competitive inhibition, and induction (Model 1) (DDI)
author: Michael Gertz

# tag: PBPK

# Initial values:
PDCompartment.Aa_sub = 0
PDCompartment.A1_sub = 0
PDCompartment.A2_sub = 0
PDCompartment.A3_sub = 0
PDCompartment.Enzyme = 1

[environment]
t = 0 in [h] bind time


[PDCompartment]

# --- DDI Parameters ---
Ki = 100000 in [pmol/L]
	desc: Inhibition constant

KI_TDI = 100000 in [pmol/L]
	desc: Time-dependent inhibition constant
	
kinact = 0.05 in [1/h]
	desc: inactivation rate constant

Emax = 1 in [dimensionless]
	desc: Maximum fold induction (1 = baseline/no induction, 4 = 4-fold induction)

EC50 = 100000 in [pmol/L]
	desc: Concentration yielding half-maximal induction	
	
hll = 1 in [dimensionless]
	desc: Hill coefficient for the steepness of the induction response	
	

# --- Victim Drug Parameters ---
fm_sub = 0.94 in [dimensionless]
	desc: metabolic fraction of the inhibited pathway (limited between 0 and 1)
	
ka_sub = 2.5 in [1/h]
	desc: absorption rate constant of the substrate drug 
	
CLpIV_sub = 28 in [L/h]
	desc: total plasma clearance of the substrate drug following IV dosing
	
CLpxhep_sub = 0 in [L/h]
	desc: extrahepatic clearance (e.g., renal clearance)
	
V1_sub = 20 in [L]
  desc: Volume of the central compartment of the substrate drug
	
V2_sub = 40 in [L]
  desc: Volume of the first peripheral compartment of the substrate drug

V3_sub = 10 in [L]
  desc: Volume of the second peripheral of the substrate drug

Q1_sub = 10 in [L/h]
  desc: Intercompartmental clearance of the substrate drug between central and first peripheral compartment
	
Q2_sub = 30 in [L/h]
  desc: Intercompartmental clearance of the substrate drug between central and second peripheral compartment		
	
FG_sub = 0.50 in [dimensionless]
  desc: intestinal availability of the substrate drug (limited between 0 and 1, contributor to bioavailability)
  
Fa_sub = 1 in [dimensionless]
  desc: fraction absorbed of the substrate drug (limited between 0 and 1, contributor to bioavailability) 

fup_sub = 0.022 in [dimensionless]
  desc: fraction unbound in plasma of substrate drug (limited between 0 and 1)

BP_sub = 0.55 in [dimensionless]
  desc: blood-to-plasma ratio of substrate drug
  
Peff_sub = 1 in [um/s] 
  desc: effective intestinal permeability of substrate drug

CLperg_sub = ((Peff_sub * 3600/1000000) * 0.66) * 1000 in [L/h]
  desc: intestinal permeability clearance 


# --- Physiological Parameters ---
Qh = 90 in [L/h]
  desc: hepatic blood flow of a typical individual	
  
Qent = 18 in [L/h]
  desc: enterocytic blood flow of a typical individual	 
  
kdegE = 0.01 in [1/h]
  desc: enzyme turnover rate constant 
	

# --- Systemic Perpetrator Driver & Modulators ---
C_Drug = 0 in [pmol/L]
	desc: Drug concentration causing the DDI effect 
	
INH = 1 + C_Drug/Ki in [dimensionless]
	desc: Extent of systemic competitive inhibition	
	
IND = 1 + (Emax - 1) * (C_Drug^hll) / (EC50^hll + C_Drug^hll) in [dimensionless]
	desc: Extent of systemic induction (multiplier on enzyme synthesis)	
	
	
# --- Hepatic Back-calculation ---
CLinth_sub = (CLpIV_sub-CLpxhep_sub)/BP_sub/(fup_sub/BP_sub*(1-(CLpIV_sub-CLpxhep_sub)/(Qh*BP_sub))) in [L/h]
	desc: hepatic intrinsic clearance (back-calculated using well-stirred liver model)

CLh_sub = (CLinth_sub*fm_sub*Enzyme/INH + CLinth_sub*(1-fm_sub))*fup_sub/BP_sub*Qh/((CLinth_sub*fm_sub*Enzyme/INH + CLinth_sub*(1-fm_sub))*fup_sub/BP_sub + Qh) in [L/h]
	desc: total hepatic blood clearance (accounting for inhibition and fm value of the affected metabolic pathway)

FHt_sub = 1-(CLh_sub/Qh) in [dimensionless]
	desc: hepatic availability of the substrate drug (contributor to bioavailability)
	

# --- Intestinal Back-calculation ---
CLintg_sub = BP_sub*CLperg_sub*Qent*(1-FG_sub)/(FG_sub*(BP_sub*Qent+CLperg_sub*fup_sub)) in [L/h]
	desc: intestinal intrinsic clearance (back-calculated modified QGut model)	

FGt_sub = Qent*CLperg_sub/(CLintg_sub*Enzyme/INH*CLperg_sub*fup_sub/BP_sub + Qent*(CLintg_sub*Enzyme/INH + CLperg_sub)) in [dimensionless]
	desc: intestinal availability of the substrate drug (assumes 100% of gut intrinsic clearance is mediated by the affected enzyme)
	
	
# --- Victim ODEs ---
C1_sub = A1_sub/V1_sub in [pmol/L]
  desc: Concentration of VICTIM drug in the central compartment

C2_sub = A2_sub/V2_sub in [pmol/L]
  desc: Concentration of VICTIM drug in the first peripheral compartment

C3_sub = A3_sub/V3_sub in [pmol/L]
  desc: Concentration of VICTIM drug in the second peripheral compartment
	
	
dot(Aa_sub) = -Aa_sub*ka_sub in [pmol]
    desc: Amount of drug in absorption compartment

dot(A1_sub) = Aa_sub*ka_sub * Fa_sub * FGt_sub * FHt_sub - (CLh_sub*BP_sub + CLpxhep_sub)*C1_sub - Q1_sub*(C1_sub - C2_sub) - Q2_sub*(C1_sub - C3_sub) in [pmol]
  desc: Amount of VICTIM drug in the central compartment 

dot(A2_sub) = Q1_sub*(C1_sub - C2_sub) in [pmol]
  desc: Amount of VICTIM drug in the first peripheral compartment 
	
dot(A3_sub) = Q2_sub*(C1_sub - C3_sub) in [pmol]
  desc: Amount of VICTIM drug in the second peripheral compartment 
  
dot(Enzyme) = kdegE*1*IND - Enzyme*(kdegE + kinact * C_Drug/(C_Drug+KI_TDI)) in [dimensionless]  
  desc: Relative enzyme expression