[[model]]
name: Indirect effect model - inhibition of elimination
author: Michael Gertz, Soledad Castano  

# All parameter values are placeholders and can be adjusted in the app under Model/Parameters

# Initial values:
PDCompartment.E = PDCompartment.E0


[environment]
t = 0 in [h] bind time


[PDCompartment]

kdegE = 0.05 in [1/h]
	desc: Degradation rate constant of the effect

E0 = 100 in [dimensionless]
	desc: Baseline of the PD effect
	
Imax = 0.80 in [dimensionless]
	desc: Maximal Inhibitory effect (value range: 0 (no effect) to 1 (complete inhibition))
	
C50 = 100000 in [pmol/L]
	desc: Concentration that produces half-maximal effects

HC = 1 in [dimensionless]
	desc: Hill coefficient
	
C_Drug = 1 in [pmol/L]	
	desc: Drug concentration causing the PD effect 
  
INH = C_Drug^HC/(C_Drug^HC+C50^HC) in [dimensionless]
	desc: Extent of inhibition

dot(E) = kdegE*(E0-E*(1-Imax*INH)) in [dimensionless]
	desc: PD effect